
#=====================================================
# VERBOSITY
#=====================================================

/control/execute mac/verbose.mac

#=====================================================
# VISUALISATION
#=====================================================

#/control/execute mac/visu.mac

#=====================================================
# GEOMETRY
#=====================================================

/gate/geometry/setMaterialDatabase data/GateMaterials.db

# World
/gate/world/geometry/setXLength 1 m
/gate/world/geometry/setYLength 1 m
/gate/world/geometry/setZLength 1 m
/gate/world/setMaterial Air

# Generate materials from Hounsfield units
/gate/HounsfieldMaterialGenerator/SetMaterialTable data/Schneider2000MaterialsTable.txt
/gate/HounsfieldMaterialGenerator/SetDensityTable  data/Schneider2000DensitiesTable.txt
/gate/HounsfieldMaterialGenerator/SetDensityTolerance               0.1 g/cm3
/gate/HounsfieldMaterialGenerator/SetOutputMaterialDatabaseFilename data/patient-HUmaterials.db
/gate/HounsfieldMaterialGenerator/SetOutputHUMaterialFilename       data/patient-HU2mat.txt
/gate/HounsfieldMaterialGenerator/Generate

/gate/world/daughters/name                      patient
/gate/world/daughters/insert                    ImageNestedParametrisedVolume

/gate/geometry/setMaterialDatabase              data/patient-HUmaterials.db
/gate/patient/geometry/setHUToMaterialFile      data/patient-HU2mat.txt
/gate/patient/geometry/setImage                 data/mhd/BrainMets-CHRU-10_CT-2mm_clip.mhd 
/gate/patient/placement/setTranslation          0 0 272 mm

# optional : dump used image
# /gate/patient/geometry/buildAndDumpLabeledImage  data/BrainMets-CHRU-10_CT-2mm-labeled-NPV.mhd


#=====================================================
# PHYSICS
#=====================================================

/gate/physics/addPhysicsList QGSP_BERT_EMV

/gate/physics/Gamma/SetCutInRegion      world 10 mm
/gate/physics/Electron/SetCutInRegion   world 10 mm
/gate/physics/Positron/SetCutInRegion   world 10 mm

/gate/physics/Gamma/SetCutInRegion      patient 0.1 mm
/gate/physics/Electron/SetCutInRegion   patient 0.1 mm
/gate/physics/Positron/SetCutInRegion   patient 0.1 mm

/gate/physics/displayCuts


#=====================================================
# DETECTORS
#=====================================================

/gate/actor/addActor                     DoseActor  dose3d
/gate/actor/dose3d/save                  dose_output/3d-BrainMets-CHRU-10_CT-proton.mhd
/gate/actor/dose3d/attachTo              patient
/gate/actor/dose3d/stepHitType           random
/gate/actor/dose3d/setPosition           0 0 0 cm
/gate/actor/dose3d/setResolution         50 50 50
/gate/actor/dose3d/saveEveryNSeconds     60
/gate/actor/dose3d/enableEdep            true
/gate/actor/dose3d/enableUncertaintyEdep true
/gate/actor/dose3d/enableDose            true
/gate/actor/dose3d/enableUncertaintyDose true
/gate/actor/dose3d/enableNumberOfHits    false

/gate/actor/addActor                        DoseActor  depthdose
/gate/actor/depthdose/save                  projet_output/depth-BrainMets-CHRU-10_CT-proton.txt
/gate/actor/depthdose/attachTo              patient
/gate/actor/depthdose/stepHitType           random
/gate/actor/depthdose/setPosition           0 0 0 cm
#/gate/actor/depthdose/setResolution        1 1 100
/gate/actor/depthdose/setVoxelSize          400 400 2 mm
/gate/actor/depthdose/saveEveryNSeconds     60
/gate/actor/depthdose/enableEdep            true
/gate/actor/depthdose/enableUncertaintyEdep true
/gate/actor/depthdose/enableDose            true
/gate/actor/depthdose/enableUncertaintyDose false
/gate/actor/depthdose/enableNumberOfHits    false

/gate/actor/addActor                          DoseActor  doseprofile
/gate/actor/doseprofile/save                  projet_output/profile-BrainMets-CHRU-10_CT-proton.txt
/gate/actor/doseprofile/attachTo              patient
/gate/actor/doseprofile/stepHitType           random
/gate/actor/doseprofile/setPosition           0 0 4 cm
/gate/actor/doseprofile/setResolution         100 1 1
/gate/actor/doseprofile/setSize               5 40 40 cm
/gate/actor/doseprofile/saveEveryNSeconds     60
/gate/actor/doseprofile/enableEdep            true
/gate/actor/doseprofile/enableUncertaintyEdep true
/gate/actor/doseprofile/enableDose            true
/gate/actor/doseprofile/enableUncertaintyDose false
/gate/actor/doseprofile/enableNumberOfHits    false


/gate/actor/addActor               SimulationStatisticActor stat
/gate/actor/stat/save              projet_output/stat-BrainMets-CHRU-10_CT-proton.txt
/gate/actor/stat/saveEveryNSeconds 60


#=====================================================
# INITIALISATION
#=====================================================

/gate/run/initialize


#=====================================================
# BEAMS
#=====================================================

/gate/source/addSource mybeam gps
/gate/source/mybeam/gps/particle proton
/gate/source/mybeam/gps/pos/type Beam
/gate/source/mybeam/gps/pos/rot1 0 1 0
/gate/source/mybeam/gps/pos/rot2 1 0 0
/gate/source/mybeam/gps/pos/shape Circle
/gate/source/mybeam/gps/pos/centre 0 0 0 mm
/gate/source/mybeam/gps/pos/sigma_x 3 mm
/gate/source/mybeam/gps/pos/sigma_y 3 mm
/gate/source/mybeam/gps/ene/mono 145 MeV
/gate/source/mybeam/gps/ene/type Gauss
/gate/source/mybeam/gps/ene/sigma 2.0 MeV
/gate/source/mybeam/gps/direction -8 12 158


#=====================================================
# START BEAMS
#=====================================================

# JamesRandom Ranlux64 MersenneTwister
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed auto

#/tracking/verbose 1

/gate/application/noGlobalOutput
/gate/application/setTotalNumberOfPrimaries 100
/gate/application/start
